PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = hemo_10min
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro_waiting_trigger
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    TextComponent Intro
      draggable = True
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0
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      text:
        In this session

        You will slowly move your head towards
        Up 30 sec, Center 30 sec
        Down 30 sec, Center 30 sec
        Left 30 sec, Center 30 sec
        Right 30 sec, Center 30 sec
        Then we repeat it again

        The scan will last 10 minutes.
    KeyboardComponent key_resp
      allowedKeys = ['s']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_instruction
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    TextComponent Stable
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Keep your head at the center
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    TextComponent up
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 30
      text = Slowly Move Up
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    TextComponent center
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 30
      text = Move back to the center
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    TextComponent down
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 30
      text = Slowly turn down
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    TextComponent center_2
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 120
      stopVal [duration (s)] = 30
      text = Move back to the center
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    TextComponent Left
      letterHeight = 0.05
      pos = (-0.35, 0)
      startVal [time (s)] = 150
      stopVal [duration (s)] = 30
      text = Slowly turn left
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    TextComponent center_3
      draggable = True
      letterHeight = 0.05
      pos = (-0.35, 0)
      startVal [time (s)] = 180
      stopVal [duration (s)] = 30
      text = Move back to the center
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    TextComponent right
      letterHeight = 0.05
      pos = (0.35, 0)
      startVal [time (s)] = 210
      stopVal [duration (s)] = 30
      text = Slowly turn right
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    TextComponent center_4
      letterHeight = 0.05
      pos = (0.35, 0)
      startVal [time (s)] = 240
      stopVal [duration (s)] = 30
      text = Move back to the center
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  Routine stable_end
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    TextComponent stableEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 70
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      text:
        Good job
        Let's have a rest
        Keep the head stable
        to the end of the scan
Flow
  Routine intro_waiting_trigger
  LoopInitiator repeat loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine show_instruction
  LoopTerminator repeat
  Routine stable_end
